PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = stroop1
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine wel
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    ImageComponent image
      image = welcome.png
      size = (1.5, 1.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine aval
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    ImageComponent avali
      image = 11.png
      size = (1.5, 1.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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  Routine dovom
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    ImageComponent dovomi
      image = 22.png
      size = (1.5, 1.0)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine dastor1
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    ImageComponent dastor
      image = 33.png
      size = (1.5, 1.0)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine trial1
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    KeyboardComponent key_resp_3
      allowedKeys [set every repeat] = 'v','n','b','m'
      correctAns = corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    ImageComponent image_5
      image [set every repeat] = $shape
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine sevom
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    ImageComponent sevomi
      image = 44.png
      size = (1.5, 1.0)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial2
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    KeyboardComponent key_resp_5
      allowedKeys [set every repeat] = 'v','n','b','m'
      correctAns = corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent text
      color [set every repeat] = $color
      languageStyle = Arabic
      letterHeight = 0.6
      pos [set every repeat] = (0, 0)
      startVal [time (s)] = 0.5
      text [set every repeat] = $shape
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    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.09,0.09)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.4
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  Routine aliii
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    ImageComponent image_2
      image = 55.png
      size = (1.5, 1.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
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  Routine trial3
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    TextComponent main_text
      color [set every repeat] = $color
      languageStyle = Arabic
      letterHeight = 0.6
      pos [set every repeat] = (0, 0)
      startVal [time (s)] = 0.5
      text [set every repeat] = $shape
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    KeyboardComponent main_keyboard
      allowedKeys [set every repeat] = 'v','n','b','m'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    PolygonComponent main_cross
      fillColor = white
      shape = cross
      size = (0.09,0.09)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.4
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  Routine charom
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    ImageComponent image_3
      image = 66.png
      size = (1.5, 1.0)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
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    ImageComponent image_4
      image = 77.png
      size = (1.5, 1.0)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine result
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    TextComponent text_2
      color = $(-1.0000, -1.0000, -1.0000)
      languageStyle = Arabic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $accuracy
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        accuracy = 123
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine results
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    CodeComponent code
      Code Type = Both
      Begin JS Routine:
        corrData = trialmain.data["main_keyboard.corr"];
        rtData = trialmain.data["main_keyboard.rt"];
        nCorrect = util.sum(corrData);
        nTrials = corrData.length;
        nWrong = (nTrials - nCorrect);
        accuracy = ((nCorrect / nTrials) * 100);
        meanRT = (util.sum(rtData) / rtData.length);
        feedbackText = ((((((((((("\u0646\u062a\u06cc\u062c\u0647 \u0646\u0647\u0627\u06cc\u06cc \u0622\u0632\u0645\u0648\u0646 \u0627\u0633\u062a\u0631\u0648\u067e\n\n" + "\u062a\u0639\u062f\u0627\u062f \u067e\u0627\u0633\u062e \u0635\u062d\u06cc\u062d: ") + nCorrect.toString()) + "\n\n\u062a\u0639\u062f\u0627\u062f \u067e\u0627\u0633\u062e \u063a\u0644\u0637: ") + nWrong.toString()) + "\n\n\u062f\u0631\u0635\u062f \u0635\u062d\u062a: ") + util.round(accuracy, 1).toString()) + "%") + "\n\n\u0645\u06cc\u0627\u0646\u06af\u06cc\u0646 \u0632\u0645\u0627\u0646 \u0648\u0627\u06a9\u0646\u0634: ") + util.round((meanRT * 1000), 0).toString()) + " \u0645\u06cc\u0644\u06cc\u200c\u062b\u0627\u0646\u06cc\u0647") + "\n\n\u0628\u0631\u0627\u06cc \u062e\u0631\u0648\u062c \u06a9\u0644\u06cc\u062f \u0641\u0627\u0635\u0644\u0647 \u0631\u0627 \u0641\u0634\u0627\u0631 \u062f\u0647\u06cc\u062f");
      Begin Routine:
        corrData = trialmain.data['main_keyboard.corr']
        rtData = trialmain.data['main_keyboard.rt']

        nCorrect = sum(corrData)
        nTrials = len(corrData)

        nWrong = nTrials - nCorrect

        accuracy = (nCorrect / nTrials) * 100

        meanRT = sum(rtData) / len(rtData)

        feedbackText = (
            "نتیجه نهایی آزمون استروپ\n\n"
            + "تعداد پاسخ صحیح: " + str(nCorrect)
            + "\n\nتعداد پاسخ غلط: " + str(nWrong)
            + "\n\nدرصد صحت: " + str(round(accuracy,1)) + "%"
            + "\n\nمیانگین زمان واکنش: "
            + str(round(meanRT*1000,0))
            + " میلی‌ثانیه"
            + "\n\nبرای خروج کلید فاصله را فشار دهید"
        )
    TextComponent text_3
      languageStyle = Arabic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $feedbackText
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    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine wel
  Routine aval
  Routine dovom
  Routine dastor1
  LoopInitiator trials1 loopType="TrialHandler"
    conditionsFile = condition1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'shape': 'red.png', 'corrAns': 'm'},
      {'shape': 'yellow.png', 'corrAns': 'b'},
      {'shape': 'blue.png', 'corrAns': 'v'},
      {'shape': 'green.png', 'corrAns': 'n'},
      {'shape': 'red.png', 'corrAns': 'm'},
      {'shape': 'yellow.png', 'corrAns': 'b'},
      {'shape': 'blue.png', 'corrAns': 'v'},
      {'shape': 'green.png', 'corrAns': 'n'}]
    Routine trial1
  LoopTerminator trials1
  Routine sevom
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = condition2.xlsx
    loopType = sequential
    nReps = 2
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    conditions:
      [{'shape': 'قرمز', 'color': 'red', 'corrAns': 'm'},
      {'shape': 'زرد', 'color': 'yellow', 'corrAns': 'b'},
      {'shape': 'سبز', 'color': 'green', 'corrAns': 'n'},
      {'shape': 'آبی', 'color': 'blue', 'corrAns': 'v'},
      {'shape': 'سبز', 'color': 'green', 'corrAns': 'n'},
      {'shape': 'قرمز', 'color': 'red', 'corrAns': 'm'},
      {'shape': 'آبی', 'color': 'blue', 'corrAns': 'v'},
      {'shape': 'زرد', 'color': 'yellow', 'corrAns': 'b'}]
    Routine trial2
  LoopTerminator trials
  Routine aliii
  Routine charom
  LoopInitiator trialmain loopType="TrialHandler"
    conditionsFile = main condition.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'shape': 'قرمز', 'color': 'red', 'corrAns': 'm', 'condition': 'congruent'},
      {'shape': 'سبز', 'color': 'blue', 'corrAns': 'v', 'condition': 'incongruent'},
      {'shape': 'زرد', 'color': 'green', 'corrAns': 'n', 'condition': 'incongruent'},
      {'shape': 'آبی', 'color': 'yellow', 'corrAns': 'b', 'condition': 'incongruent'},
      {'shape': 'قرمز', 'color': 'green', 'corrAns': 'n', 'condition': 'incongruent'},
      {'shape': 'زرد', 'color': 'yellow', 'corrAns': 'b', 'condition': 'congruent'},
      {'shape': 'سبز', 'color': 'red', 'corrAns': 'm', 'condition': 'incongruent'},
      {'shape': 'آبی', 'color': 'blue', 'corrAns': 'v', 'condition': 'congruent'},
      {'shape': 'زرد', 'color': 'red', 'corrAns': 'm', 'condition': 'incongruent'},
      {'shape': 'قرمز', 'color': 'blue', 'corrAns': 'v', 'condition': 'incongruent'},
      {'shape': 'سبز', 'color': 'green', 'corrAns': 'n', 'condition': 'congruent'},
      {'shape': 'آبی', 'color': 'red', 'corrAns': 'm', 'condition': 'incongruent'},
      {'shape': 'قرمز', 'color': 'yellow', 'corrAns': 'b', 'condition': 'incongruent'},
      {'shape': 'زرد', 'color': 'blue', 'corrAns': 'v', 'condition': 'incongruent'},
      {'shape': 'سبز', 'color': 'yellow', 'corrAns': 'b', 'condition': 'incongruent'},
      {'shape': 'آبی', 'color': 'green', 'corrAns': 'n', 'condition': 'incongruent'},
      {'shape': 'سبز', 'color': 'blue', 'corrAns': 'v', 'condition': 'incongruent'},
      {'shape': 'قرمز', 'color': 'red', 'corrAns': 'm', 'condition': 'congruent'},
      {'shape': 'آبی', 'color': 'yellow', 'corrAns': 'b', 'condition': 'incongruent'}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
    Routine trial3
  LoopTerminator trialmain
  Routine results
  Routine end
